proc celldef() {
  topol()
  subsets()
  geom()
  biophys()
  geom_nseg()
}

create soma, axon[475], dendrite[49]

proc topol() { local i
  connect axon(0), soma(0)
  for i = 1, 2 connect axon[i](0), axon(1)
  for i = 3, 4 connect axon[i](0), axon[2](1)
  for i = 5, 6 connect axon[i](0), axon[3](1)
  for i = 7, 8 connect axon[i](0), axon[4](1)
  for i = 9, 10 connect axon[i](0), axon[5](1)
  for i = 11, 12 connect axon[i](0), axon[7](1)
  for i = 13, 14 connect axon[i](0), axon[8](1)
  for i = 15, 16 connect axon[i](0), axon[10](1)
  for i = 17, 18 connect axon[i](0), axon[12](1)
  for i = 19, 20 connect axon[i](0), axon[13](1)
  for i = 21, 22 connect axon[i](0), axon[14](1)
  for i = 23, 24 connect axon[i](0), axon[16](1)
  for i = 25, 26 connect axon[i](0), axon[18](1)
  for i = 27, 28 connect axon[i](0), axon[20](1)
  for i = 29, 30 connect axon[i](0), axon[22](1)
  for i = 31, 32 connect axon[i](0), axon[24](1)
  for i = 33, 34 connect axon[i](0), axon[30](1)
  for i = 35, 36 connect axon[i](0), axon[32](1)
  for i = 37, 38 connect axon[i](0), axon[33](1)
  for i = 39, 40 connect axon[i](0), axon[34](1)
  for i = 41, 42 connect axon[i](0), axon[36](1)
  for i = 43, 44 connect axon[i](0), axon[38](1)
  for i = 45, 46 connect axon[i](0), axon[40](1)
  for i = 47, 48 connect axon[i](0), axon[42](1)
  for i = 49, 51 connect axon[i](0), axon[43](1)
  for i = 52, 53 connect axon[i](0), axon[46](1)
  for i = 54, 55 connect axon[i](0), axon[48](1)
  for i = 56, 57 connect axon[i](0), axon[51](1)
  for i = 58, 59 connect axon[i](0), axon[52](1)
  for i = 60, 61 connect axon[i](0), axon[53](1)
  for i = 62, 63 connect axon[i](0), axon[55](1)
  for i = 64, 65 connect axon[i](0), axon[57](1)
  for i = 66, 67 connect axon[i](0), axon[61](1)
  for i = 68, 69 connect axon[i](0), axon[63](1)
  for i = 70, 71 connect axon[i](0), axon[65](1)
  for i = 72, 73 connect axon[i](0), axon[67](1)
  for i = 74, 75 connect axon[i](0), axon[69](1)
  for i = 76, 78 connect axon[i](0), axon[70](1)
  for i = 79, 80 connect axon[i](0), axon[71](1)
  for i = 81, 82 connect axon[i](0), axon[73](1)
  for i = 83, 84 connect axon[i](0), axon[75](1)
  for i = 85, 86 connect axon[i](0), axon[77](1)
  for i = 87, 88 connect axon[i](0), axon[78](1)
  for i = 89, 90 connect axon[i](0), axon[79](1)
  for i = 91, 92 connect axon[i](0), axon[82](1)
  for i = 93, 94 connect axon[i](0), axon[84](1)
  for i = 95, 96 connect axon[i](0), axon[85](1)
  for i = 97, 98 connect axon[i](0), axon[91](1)
  for i = 99, 100 connect axon[i](0), axon[92](1)
  for i = 101, 102 connect axon[i](0), axon[94](1)
  for i = 103, 105 connect axon[i](0), axon[96](1)
  for i = 106, 107 connect axon[i](0), axon[99](1)
  for i = 108, 109 connect axon[i](0), axon[100](1)
  for i = 110, 111 connect axon[i](0), axon[107](1)
  for i = 112, 113 connect axon[i](0), axon[108](1)
  for i = 114, 115 connect axon[i](0), axon[109](1)
  for i = 116, 117 connect axon[i](0), axon[110](1)
  for i = 118, 119 connect axon[i](0), axon[113](1)
  for i = 120, 121 connect axon[i](0), axon[115](1)
  for i = 122, 123 connect axon[i](0), axon[116](1)
  for i = 124, 125 connect axon[i](0), axon[117](1)
  for i = 126, 127 connect axon[i](0), axon[119](1)
  for i = 128, 129 connect axon[i](0), axon[120](1)
  for i = 130, 131 connect axon[i](0), axon[121](1)
  for i = 132, 133 connect axon[i](0), axon[123](1)
  for i = 134, 135 connect axon[i](0), axon[126](1)
  for i = 136, 137 connect axon[i](0), axon[129](1)
  for i = 138, 140 connect axon[i](0), axon[131](1)
  for i = 141, 142 connect axon[i](0), axon[137](1)
  for i = 143, 144 connect axon[i](0), axon[138](1)
  for i = 145, 146 connect axon[i](0), axon[140](1)
  for i = 147, 148 connect axon[i](0), axon[142](1)
  for i = 149, 152 connect axon[i](0), axon[144](1)
  for i = 153, 154 connect axon[i](0), axon[146](1)
  for i = 155, 156 connect axon[i](0), axon[147](1)
  for i = 157, 158 connect axon[i](0), axon[148](1)
  for i = 159, 160 connect axon[i](0), axon[150](1)
  for i = 161, 162 connect axon[i](0), axon[154](1)
  for i = 163, 164 connect axon[i](0), axon[156](1)
  for i = 165, 166 connect axon[i](0), axon[162](1)
  for i = 167, 168 connect axon[i](0), axon[164](1)
  for i = 169, 170 connect axon[i](0), axon[165](1)
  for i = 171, 172 connect axon[i](0), axon[166](1)
  for i = 173, 176 connect axon[i](0), axon[168](1)
  for i = 177, 178 connect axon[i](0), axon[170](1)
  for i = 179, 180 connect axon[i](0), axon[172](1)
  for i = 181, 182 connect axon[i](0), axon[173](1)
  for i = 183, 184 connect axon[i](0), axon[176](1)
  for i = 185, 186 connect axon[i](0), axon[177](1)
  for i = 187, 188 connect axon[i](0), axon[179](1)
  for i = 189, 190 connect axon[i](0), axon[180](1)
  for i = 191, 192 connect axon[i](0), axon[182](1)
  for i = 193, 194 connect axon[i](0), axon[183](1)
  for i = 195, 196 connect axon[i](0), axon[186](1)
  for i = 197, 198 connect axon[i](0), axon[187](1)
  for i = 199, 200 connect axon[i](0), axon[188](1)
  for i = 201, 203 connect axon[i](0), axon[189](1)
  for i = 204, 205 connect axon[i](0), axon[190](1)
  for i = 206, 207 connect axon[i](0), axon[191](1)
  for i = 208, 209 connect axon[i](0), axon[192](1)
  for i = 210, 212 connect axon[i](0), axon[195](1)
  for i = 213, 214 connect axon[i](0), axon[196](1)
  for i = 215, 216 connect axon[i](0), axon[198](1)
  for i = 217, 218 connect axon[i](0), axon[199](1)
  for i = 219, 220 connect axon[i](0), axon[200](1)
  for i = 221, 222 connect axon[i](0), axon[205](1)
  for i = 223, 224 connect axon[i](0), axon[207](1)
  for i = 225, 226 connect axon[i](0), axon[211](1)
  for i = 227, 228 connect axon[i](0), axon[212](1)
  for i = 229, 230 connect axon[i](0), axon[213](1)
  for i = 231, 232 connect axon[i](0), axon[215](1)
  for i = 233, 234 connect axon[i](0), axon[216](1)
  for i = 235, 236 connect axon[i](0), axon[217](1)
  for i = 237, 238 connect axon[i](0), axon[222](1)
  for i = 239, 240 connect axon[i](0), axon[224](1)
  for i = 241, 242 connect axon[i](0), axon[225](1)
  for i = 243, 244 connect axon[i](0), axon[231](1)
  for i = 245, 246 connect axon[i](0), axon[232](1)
  for i = 247, 248 connect axon[i](0), axon[234](1)
  for i = 249, 250 connect axon[i](0), axon[238](1)
  for i = 251, 252 connect axon[i](0), axon[239](1)
  for i = 253, 254 connect axon[i](0), axon[244](1)
  for i = 255, 256 connect axon[i](0), axon[248](1)
  for i = 257, 258 connect axon[i](0), axon[250](1)
  for i = 259, 260 connect axon[i](0), axon[252](1)
  for i = 261, 262 connect axon[i](0), axon[253](1)
  for i = 263, 264 connect axon[i](0), axon[256](1)
  for i = 265, 266 connect axon[i](0), axon[257](1)
  for i = 267, 271 connect axon[i](0), axon[258](1)
  for i = 272, 273 connect axon[i](0), axon[259](1)
  for i = 274, 275 connect axon[i](0), axon[260](1)
  for i = 276, 278 connect axon[i](0), axon[262](1)
  for i = 279, 280 connect axon[i](0), axon[264](1)
  for i = 281, 282 connect axon[i](0), axon[265](1)
  for i = 283, 284 connect axon[i](0), axon[266](1)
  for i = 285, 286 connect axon[i](0), axon[267](1)
  for i = 287, 288 connect axon[i](0), axon[268](1)
  for i = 289, 290 connect axon[i](0), axon[271](1)
  for i = 291, 292 connect axon[i](0), axon[275](1)
  for i = 293, 294 connect axon[i](0), axon[277](1)
  for i = 295, 296 connect axon[i](0), axon[278](1)
  for i = 297, 298 connect axon[i](0), axon[283](1)
  for i = 299, 300 connect axon[i](0), axon[286](1)
  for i = 301, 302 connect axon[i](0), axon[287](1)
  for i = 303, 304 connect axon[i](0), axon[290](1)
  for i = 305, 306 connect axon[i](0), axon[298](1)
  for i = 307, 308 connect axon[i](0), axon[302](1)
  for i = 309, 310 connect axon[i](0), axon[304](1)
  for i = 311, 312 connect axon[i](0), axon[308](1)
  for i = 313, 314 connect axon[i](0), axon[310](1)
  for i = 315, 316 connect axon[i](0), axon[312](1)
  for i = 317, 318 connect axon[i](0), axon[314](1)
  for i = 319, 320 connect axon[i](0), axon[316](1)
  for i = 321, 322 connect axon[i](0), axon[318](1)
  for i = 323, 325 connect axon[i](0), axon[322](1)
  for i = 326, 327 connect axon[i](0), axon[323](1)
  for i = 328, 329 connect axon[i](0), axon[324](1)
  for i = 330, 331 connect axon[i](0), axon[325](1)
  for i = 332, 333 connect axon[i](0), axon[328](1)
  for i = 334, 337 connect axon[i](0), axon[331](1)
  for i = 338, 339 connect axon[i](0), axon[332](1)
  for i = 340, 341 connect axon[i](0), axon[333](1)
  for i = 342, 343 connect axon[i](0), axon[334](1)
  for i = 344, 345 connect axon[i](0), axon[335](1)
  for i = 346, 347 connect axon[i](0), axon[337](1)
  for i = 348, 349 connect axon[i](0), axon[341](1)
  for i = 350, 351 connect axon[i](0), axon[342](1)
  for i = 352, 353 connect axon[i](0), axon[344](1)
  for i = 354, 355 connect axon[i](0), axon[347](1)
  for i = 356, 357 connect axon[i](0), axon[348](1)
  for i = 358, 359 connect axon[i](0), axon[350](1)
  for i = 360, 361 connect axon[i](0), axon[352](1)
  for i = 362, 363 connect axon[i](0), axon[355](1)
  for i = 364, 365 connect axon[i](0), axon[356](1)
  for i = 366, 367 connect axon[i](0), axon[359](1)
  for i = 368, 369 connect axon[i](0), axon[360](1)
  for i = 370, 371 connect axon[i](0), axon[363](1)
  for i = 372, 373 connect axon[i](0), axon[369](1)
  for i = 374, 375 connect axon[i](0), axon[371](1)
  for i = 376, 377 connect axon[i](0), axon[375](1)
  for i = 378, 379 connect axon[i](0), axon[377](1)
  for i = 380, 381 connect axon[i](0), axon[379](1)
  for i = 382, 383 connect axon[i](0), axon[381](1)
  for i = 384, 385 connect axon[i](0), axon[382](1)
  for i = 386, 387 connect axon[i](0), axon[383](1)
  for i = 388, 390 connect axon[i](0), axon[384](1)
  for i = 391, 392 connect axon[i](0), axon[386](1)
  for i = 393, 394 connect axon[i](0), axon[387](1)
  for i = 395, 396 connect axon[i](0), axon[391](1)
  for i = 397, 398 connect axon[i](0), axon[394](1)
  for i = 399, 400 connect axon[i](0), axon[398](1)
  for i = 401, 402 connect axon[i](0), axon[400](1)
  for i = 403, 404 connect axon[i](0), axon[402](1)
  for i = 405, 406 connect axon[i](0), axon[404](1)
  for i = 407, 408 connect axon[i](0), axon[406](1)
  for i = 409, 410 connect axon[i](0), axon[408](1)
  for i = 411, 412 connect axon[i](0), axon[410](1)
  for i = 413, 414 connect axon[i](0), axon[412](1)
  for i = 415, 416 connect axon[i](0), axon[414](1)
  topol_1()
}
proc topol_1() {
  for i = 417, 418 connect axon[i](0), axon[416](1)
  for i = 419, 420 connect axon[i](0), axon[418](1)
  for i = 421, 422 connect axon[i](0), axon[420](1)
  for i = 423, 425 connect axon[i](0), axon[422](1)
  for i = 426, 427 connect axon[i](0), axon[425](1)
  for i = 428, 429 connect axon[i](0), axon[427](1)
  for i = 430, 431 connect axon[i](0), axon[429](1)
  for i = 432, 434 connect axon[i](0), axon[431](1)
  for i = 435, 436 connect axon[i](0), axon[434](1)
  for i = 437, 439 connect axon[i](0), axon[436](1)
  for i = 440, 441 connect axon[i](0), axon[439](1)
  for i = 442, 443 connect axon[i](0), axon[441](1)
  for i = 444, 445 connect axon[i](0), axon[443](1)
  for i = 446, 447 connect axon[i](0), axon[445](1)
  for i = 448, 449 connect axon[i](0), axon[447](1)
  for i = 450, 451 connect axon[i](0), axon[449](1)
  for i = 452, 453 connect axon[i](0), axon[450](1)
  for i = 454, 455 connect axon[i](0), axon[452](1)
  for i = 456, 458 connect axon[i](0), axon[453](1)
  for i = 459, 460 connect axon[i](0), axon[454](1)
  for i = 461, 462 connect axon[i](0), axon[455](1)
  for i = 463, 464 connect axon[i](0), axon[456](1)
  for i = 465, 466 connect axon[i](0), axon[464](1)
  for i = 467, 468 connect axon[i](0), axon[465](1)
  for i = 469, 470 connect axon[i](0), axon[467](1)
  for i = 471, 472 connect axon[i](0), axon[468](1)
  for i = 473, 474 connect axon[i](0), axon[469](1)
  for i = 0, 1 connect dendrite[i](0), soma(1)
  for i = 2, 3 connect dendrite[i](0), dendrite(1)
  for i = 4, 6 connect dendrite[i](0), dendrite[1](1)
  for i = 7, 8 connect dendrite[i](0), dendrite[2](1)
  for i = 9, 10 connect dendrite[i](0), dendrite[3](1)
  for i = 11, 12 connect dendrite[i](0), dendrite[4](1)
  for i = 13, 14 connect dendrite[i](0), dendrite[6](1)
  for i = 15, 16 connect dendrite[i](0), dendrite[7](1)
  for i = 17, 18 connect dendrite[i](0), dendrite[8](1)
  for i = 19, 20 connect dendrite[i](0), dendrite[9](1)
  for i = 21, 22 connect dendrite[i](0), dendrite[11](1)
  for i = 23, 24 connect dendrite[i](0), dendrite[12](1)
  for i = 25, 26 connect dendrite[i](0), dendrite[16](1)
  for i = 27, 28 connect dendrite[i](0), dendrite[18](1)
  for i = 29, 30 connect dendrite[i](0), dendrite[19](1)
  for i = 31, 32 connect dendrite[i](0), dendrite[21](1)
  for i = 33, 34 connect dendrite[i](0), dendrite[23](1)
  for i = 35, 36 connect dendrite[i](0), dendrite[24](1)
  for i = 37, 38 connect dendrite[i](0), dendrite[27](1)
  for i = 39, 40 connect dendrite[i](0), dendrite[28](1)
  connect dendrite[41](0), dendrite[10](1)  
  connect dendrite[42](0), dendrite[32](1)
  for i = 43, 44 connect dendrite[i](0), dendrite[40](1)
  connect dendrite[45](0), dendrite[10](1)
  connect dendrite[46](0), dendrite[42](1)
  for i = 47, 48 connect dendrite[i](0), dendrite[46](1)
  
  
  
  basic_shape()
}
proc shape3d_1() {
  soma {pt3dclear()
	pt3dadd(1239.84, -1104.46, 0, 2.46375)
	pt3dadd(1240.58, -1104.53, 0, 3.24078)
	pt3dadd(1241.19, -1104.55, 0, 4.07467)
	pt3dadd(1241.93, -1104.7, 0, 4.92751)
	pt3dadd(1243.12, -1104.91, 0, 6.50052)
	pt3dadd(1244.6, -1105.25, 0, 8.81265)
	pt3dadd(1246, -1104.74, 0, 10.3667)
	pt3dadd(1246.64, -1104.27, 0, 10.4425)
	pt3dadd(1248.37, -1103.59, 0, 10.0824)
	pt3dadd(1250.28, -1102.87, 0, 9.89291)
	pt3dadd(1250.78, -1102.7, 0, 9.38121)
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  }
}
proc shape3d_2() {
  axon {	pt3dadd(1203.67, -1079.83, 13.4269, 0.4)
	pt3dadd(1203.46, -1079.68, 13.3633, 0.4)
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  }
}
proc shape3d_3() {
  dendrite[4] {	pt3dadd(1304.19, -1066.96, -18, 0.85)
	pt3dadd(1305.34, -1066.26, -18, 0.85)
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  }
}
proc shape3d_4() {
  axon[4] {	pt3dadd(1193.3, -1075.8, 13.963, 1.15)
	pt3dadd(1193.21, -1075.79, 13.963, 1.15)
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  }
}
proc shape3d_5() {
  dendrite[10] {	pt3dadd(1337.88, -1059.57, -6.19998, 0.75)
	pt3dadd(1338.18, -1059.37, -6.09998, 0.75)
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  }
}
proc shape3d_6() {
  dendrite[12] {	pt3dadd(1310.04, -1063.96, -18.1, 0.75)
	pt3dadd(1310.14, -1063.86, -18.1, 0.75)
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  }
}
proc shape3d_7() {
  dendrite[14] {	pt3dadd(1397.57, -940.998, -47.9003, 0.45)
	pt3dadd(1397.67, -940.648, -48.0003, 0.45)
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  }
}
proc shape3d_8() {
  dendrite[15] {	pt3dadd(1303.69, -1076.61, 3.29999, 0.45)
	pt3dadd(1303.94, -1076.41, 3.29999, 0.45)
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  }
}
proc shape3d_9() {
  dendrite[18] {	pt3dadd(1287.34, -1055.41, -2.19999, 0.45)
	pt3dadd(1287.34, -1055.06, -2.19999, 0.45)
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  }
}
proc shape3d_10() {
  dendrite[22] {	pt3dadd(1374.39, -1034.29, -17.5, 0.45)
	pt3dadd(1374.84, -1034.04, -17.5, 0.45)
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  }
}
proc shape3d_11() {
  dendrite[22] {	pt3dadd(1477.49, -977.709, -20.8001, 0.45)
	pt3dadd(1478.28, -976.562, -20.4001, 0.45)
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  }
}
proc shape3d_12() {
  axon[12] {	pt3dadd(1192.15, -1077.2, 14.4918, 0.4)
	pt3dadd(1191.97, -1077.38, 14.5492, 0.4)
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  }
}
proc shape3d_13() {
  dendrite[27] {	pt3dadd(1303.01, -1015.03, 1.8, 0.45)
	pt3dadd(1303.06, -1014.48, 1.9, 0.45)
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  }
}
proc shape3d_14() {
  dendrite[28] {	pt3dadd(1302.56, -1033.43, -1.8, 0.45)
	pt3dadd(1302.76, -1033.28, -1.8, 0.45)
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  }
}
proc shape3d_15() {
  dendrite[28] {	pt3dadd(1355.31, -973.477, 6.19999, 0.5)
	pt3dadd(1355.36, -973.377, 6.19999, 0.5)
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  }
}
proc shape3d_16() {
  dendrite[34] {	pt3dadd(1377.89, -1021.44, -24.5001, 0.45)
	pt3dadd(1377.94, -1021.39, -24.5001, 0.45)
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  }
}
proc shape3d_17() {
  dendrite[34] {	pt3dadd(1440.94, -982.143, -48.2003, 0.45)
	pt3dadd(1441.09, -982.143, -48.3003, 0.45)
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  }
}
proc shape3d_18() {
  dendrite[36] {	pt3dadd(1474.24, -923.477, -26.7001, 0.45)
	pt3dadd(1473.94, -922.878, -26.7001, 0.45)
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  }
}
proc shape3d_19() {
  dendrite[38] {	pt3dadd(1322.08, -917.703, 2.39999, 0.45)
	pt3dadd(1322.13, -916.103, 2, 0.45)
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  }
}
proc shape3d_20() {
  dendrite[40] {	pt3dadd(1397.46, -920.48, 6.79999, 0.45)
	pt3dadd(1398.46, -919.13, 6.79999, 0.45)
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  }
}
proc shape3d_21() {
  axon[26] {	pt3dadd(1198.67, -1096.9, 20.6723, 0.65)
	pt3dadd(1198.61, -1097.3, 20.5881, 0.7)
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  }
}
proc shape3d_22() {
  axon[26] {	pt3dadd(1210.64, -1149.9, 39.1702, 0.7)
	pt3dadd(1210.8, -1150.1, 39.3258, 0.75)
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  }
}
proc shape3d_23() {
  dendrite[45] {	pt3dadd(1470.5, -1041.94, -14.5, 0.793901)
	pt3dadd(1470.94, -1042.38, -14.5, 0.793901)
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  }
}
proc shape3d_24() {
  dendrite[47] {	pt3dadd(1450.3, -1035.15, -15.1, 0.529267)
	pt3dadd(1451.8, -1035.06, -15.1, 0.529267)
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  }
}
proc shape3d_25() {
  dendrite[48] {	pt3dadd(1494.36, -1039.08, -11.2, 0.45)
	pt3dadd(1495.21, -1038.73, -11.3, 0.45)
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  }
}
proc shape3d_26() {
  axon[38] {	pt3dadd(1150.26, -1044.19, 20.2395, 0.95)
	pt3dadd(1150.18, -1043.98, 20.4763, 0.95)
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  }
}
proc shape3d_27() {
  axon[51] {  }
  axon[52] {pt3dclear()
	pt3dadd(1161.12, -1091.95, 14.7978, 0.7)
	pt3dadd(1160.97, -1092.5, 14.8181, 0.4)
	pt3dadd(1160.99, -1092.86, 14.8833, 0.25)
	pt3dadd(1161.09, -1093.15, 14.8366, 0.2)
	pt3dadd(1161.17, -1093.47, 14.8881, 0.25)
	pt3dadd(1161.23, -1093.76, 14.8419, 0.4)
	pt3dadd(1161.26, -1094.09, 14.8773, 0.45)
	pt3dadd(1161.28, -1094.36, 15.0434, 0.3)
	pt3dadd(1161.38, -1094.67, 15.0516, 0.25)
	pt3dadd(1161.53, -1094.91, 15.0789, 0.35)
	pt3dadd(1161.65, -1095.17, 15.1591, 0.4)
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  }
}
proc shape3d_28() {
  axon[59] {	pt3dadd(1177.09, -1104.91, 12.9552, 0.2)
	pt3dadd(1177.06, -1105.29, 12.9121, 0.2)
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  }
}
proc shape3d_29() {
  axon[71] {	pt3dadd(1122.86, -1008.98, 28.0823, 0.35)
	pt3dadd(1122.77, -1008.85, 28.3215, 0.4)
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  }
}
proc shape3d_30() {
  axon[85] {	pt3dadd(1117.54, -1016.34, 25.2379, 0.65)
	pt3dadd(1117.19, -1016.38, 25.2618, 0.55)
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  }
}
proc shape3d_31() {
  axon[92] {	pt3dadd(1142.66, -1080.08, 27.6957, 0.75)
	pt3dadd(1142.51, -1079.95, 27.8002, 0.75)
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  }
}
proc shape3d_32() {
  axon[94] {	pt3dadd(1161.13, -1095.02, -0.10365, 0.45)
	pt3dadd(1161.12, -1095.09, -0.36705, 0.6)
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  }
}
proc shape3d_33() {
  axon[101] {	pt3dadd(1152.48, -1101.66, -1.29735, 0.25)
	pt3dadd(1152.34, -1101.93, -1.2327, 0.35)
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  }
}
proc shape3d_34() {
  axon[107] {	pt3dadd(1084.61, -1049.08, 42.9969, 0.5)
	pt3dadd(1084.36, -1049.05, 43.1722, 0.45)
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  }
}
proc shape3d_35() {
  axon[116] {	pt3dadd(1049.93, -1060.72, 64.8106, 0.6)
	pt3dadd(1049.74, -1060.81, 64.9717, 0.55)
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  }
}
proc shape3d_36() {
  axon[116] {	pt3dadd(1021.51, -1083.6, 98.8779, 0.65)
	pt3dadd(1021.39, -1083.42, 99.1281, 0.6)
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  }
}
proc shape3d_37() {
  axon[119] {	pt3dadd(1095.89, -1037.61, 16.0352, 1.1)
	pt3dadd(1095.94, -1037.61, 16.3902, 1.05)
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  }
}
proc shape3d_38() {
  axon[121] {	pt3dadd(1064.69, -1032.21, 41.2379, 0.65)
	pt3dadd(1064.51, -1032.09, 41.154, 0.7)
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  }
}
proc shape3d_39() {
  axon[125] {	pt3dadd(1061.64, -1075.63, 0.16965, 0.6)
	pt3dadd(1061.67, -1075.76, -0.0871502, 0.55)
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  }
}
proc shape3d_40() {
  axon[129] {	pt3dadd(1116.36, -1017.09, 9.9465, 0.5)
	pt3dadd(1116.72, -1017.2, 9.93165, 0.5)
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  }
}
proc shape3d_41() {
  axon[131] {	pt3dadd(1033.28, -1007.43, 36.4869, 0.6)
	pt3dadd(1033.15, -1007.26, 36.3605, 0.6)
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  }
}
proc shape3d_42() {
  axon[138] {	pt3dadd(1035.07, -1000.36, 35.8679, 0.4)
	pt3dadd(1035.26, -1000.16, 35.8926, 0.4)
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  }
}
proc shape3d_43() {
  axon[142] {	pt3dadd(1131.69, -1008.68, -1.83135, 0.25)
	pt3dadd(1131.84, -1008.55, -2.1084, 0.35)
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  }
}
proc shape3d_44() {
  axon[149] {	pt3dadd(1041.21, -994.546, 62.8154, 0.6)
	pt3dadd(1041.42, -994.41, 62.9928, 0.6)
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  }
}
proc shape3d_45() {
  axon[152] {	pt3dadd(1046.47, -982.154, 56.3409, 0.55)
	pt3dadd(1046.77, -982.077, 56.2724, 0.6)
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  }
}
proc shape3d_46() {
  axon[153] {	pt3dadd(1004.7, -978.973, 60.306, 0.55)
	pt3dadd(1004.49, -979.068, 60.4257, 0.5)
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  }
}
proc shape3d_47() {
  axon[153] {	pt3dadd(961.859, -1001.68, 81.2987, 0.55)
	pt3dadd(961.738, -1001.85, 81.5067, 0.6)
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  }
}
proc shape3d_48() {
  axon[153] {	pt3dadd(930.6, -1036.44, 101.399, 0.45)
	pt3dadd(930.57, -1036.8, 101.422, 0.6)
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  }
}
proc shape3d_49() {
  axon[156] {	pt3dadd(1144.23, -1000.93, -9.20235, 0.4108)
	pt3dadd(1144.25, -1000.96, -9.297, 0.4108)
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  }
}
proc shape3d_50() {
  axon[159] {	pt3dadd(1025.07, -995.663, 70.8403, 0.45)
	pt3dadd(1024.92, -995.519, 70.9747, 0.4)
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  }
}
proc shape3d_51() {
  axon[166] {	pt3dadd(983.065, -986.108, 37.6726, 0.55)
	pt3dadd(982.814, -985.978, 37.6874, 0.55)
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  }
}
proc shape3d_52() {
  axon[166] {	pt3dadd(932.495, -964.4, 39.3387, 0.6)
	pt3dadd(932.298, -964.286, 39.3708, 0.6)
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  }
}
proc shape3d_53() {
  axon[170] {	pt3dadd(996.642, -1006.79, 44.0901, 0.4)
	pt3dadd(996.454, -1007, 44.0723, 0.4)
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  }
}
proc shape3d_54() {
  axon[170] {	pt3dadd(975.338, -1053.62, 57.072, 0.35)
	pt3dadd(975.299, -1053.98, 57.1476, 0.4)
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  }
}
proc shape3d_55() {
  axon[173] {	pt3dadd(1170.42, -1045.54, -19.9833, 0.45)
	pt3dadd(1170.62, -1045.79, -19.9403, 0.4)
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  }
}
proc shape3d_56() {
  axon[174] {	pt3dadd(1145.27, -1010.41, -13.7666, 0.4108)
	pt3dadd(1145.29, -1010.39, -13.7572, 0.4108)
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  }
}
proc shape3d_57() {
  axon[174] {	pt3dadd(1115.57, -985.358, -12.9222, 0.4108)
	pt3dadd(1115.64, -985.319, -12.9536, 0.4108)
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  }
}
proc shape3d_58() {
  axon[174] {	pt3dadd(1094.56, -970.601, -12.2446, 0.4108)
	pt3dadd(1094.16, -970.357, -12.2696, 0.4108)
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  }
}
proc shape3d_59() {
  axon[179] {	pt3dadd(874.468, -943.032, 62.7648, 0.45)
	pt3dadd(874.185, -943.068, 62.8716, 0.45)
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  }
}
proc shape3d_60() {
  axon[180] {	pt3dadd(885.818, -929.915, 42.116, 0.6)
	pt3dadd(885.631, -929.742, 42.051, 0.6)
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  }
}
proc shape3d_61() {
  axon[182] {	pt3dadd(1178.87, -1060.87, -16.062, 0.3)
	pt3dadd(1178.77, -1061.16, -16.0464, 0.3)
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  }
}
proc shape3d_62() {
  axon[186] {	pt3dadd(962.779, -1080.39, 73.6536, 0.8)
	pt3dadd(962.703, -1080.46, 74.0172, 0.75)
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  }
}
proc shape3d_63() {
  axon[188] {	pt3dadd(839.436, -957.764, 84.2831, 0.35)
	pt3dadd(839.647, -957.954, 84.2731, 0.3)
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  }
}
proc shape3d_64() {
  axon[194] {	pt3dadd(1170.84, -1028.78, -15.3488, 0.4)
	pt3dadd(1171.12, -1028.9, -15.3555, 0.35)
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  }
}
proc shape3d_65() {
  axon[198] {	pt3dadd(783.394, -978.143, 102.288, 0.6)
	pt3dadd(783.291, -978.378, 102.251, 0.55)
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  }
}
proc shape3d_66() {
  axon[206] {	pt3dadd(1192.34, -1037.26, -15.8187, 0.55)
	pt3dadd(1192.39, -1036.87, -15.8837, 0.65)
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  }
}
proc shape3d_67() {
  axon[207] {	pt3dadd(1179.91, -1104.43, -18.8579, 0.4)
	pt3dadd(1179.8, -1104.7, -18.8451, 0.4)
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  }
}
proc shape3d_68() {
  axon[218] {	pt3dadd(861.442, -968.112, 62.7794, 1.7)
	pt3dadd(861.59, -967.953, 62.7794, 1.7)
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  }
}
proc shape3d_69() {
  axon[219] {	pt3dadd(884.896, -967.785, 28.7125, 0.45)
	pt3dadd(885.217, -967.806, 28.6167, 0.4)
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  }
}
proc shape3d_70() {
  axon[222] {	pt3dadd(831.22, -863.669, 27.0399, 0.6)
	pt3dadd(830.929, -863.651, 26.9331, 0.55)
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  }
}
proc shape3d_71() {
  axon[223] {	pt3dadd(1209.19, -1140.46, -27.4608, 0.4)
	pt3dadd(1209.39, -1140.62, -27.527, 0.35)
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  }
}
proc shape3d_72() {
  axon[229] {	pt3dadd(965.049, -1111.65, 89.9519, 1.6)
	pt3dadd(965.182, -1111.9, 89.9724, 1.4)
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  }
}
proc shape3d_73() {
  axon[236] {	pt3dadd(862.096, -969.769, 62.5437, 0.6)
	pt3dadd(862.234, -969.962, 62.4999, 0.4)
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  }
}
proc shape3d_74() {
  axon[238] {	pt3dadd(790.343, -836.129, 14.6777, 0.6)
	pt3dadd(790.23, -835.936, 14.622, 0.65)
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  }
}
proc shape3d_75() {
  axon[250] {	pt3dadd(785.466, -818.979, 17.544, 0.6)
	pt3dadd(785.353, -818.736, 17.5873, 0.6)
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  }
}
proc shape3d_76() {
  axon[259] {	pt3dadd(1177.59, -1104.69, -20.7672, 0.45)
	pt3dadd(1177.45, -1104.58, -20.9636, 0.5)
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  }
}
proc shape3d_77() {
  axon[273] {	pt3dadd(1169.49, -1100.34, -22.2846, 0.2)
	pt3dadd(1169.17, -1100.25, -22.3008, 0.2)
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  }
}
proc shape3d_78() {
  axon[275] {	pt3dadd(1193.75, -1134.43, -9.78135, 0.95)
	pt3dadd(1193.37, -1134.42, -9.8448, 0.8)
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  }
}
proc shape3d_79() {
  axon[288] {	pt3dadd(780.086, -805.67, 17.4494, 0.3)
	pt3dadd(779.96, -805.91, 17.4099, 0.3)
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  }
}
proc shape3d_80() {
  axon[292] {	pt3dadd(1172.38, -1123.62, -24.4989, 0.5)
	pt3dadd(1172.01, -1123.62, -24.5538, 0.45)
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  }
}
proc shape3d_81() {
  axon[292] {	pt3dadd(1129.27, -1094.69, -34.2035, 0.45)
	pt3dadd(1129, -1094.57, -34.1899, 0.5)
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  }
}
proc shape3d_82() {
  axon[292] {	pt3dadd(1094.79, -1061.69, -22.6998, 0.45)
	pt3dadd(1094.54, -1061.56, -22.5788, 0.4)
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  }
}
proc shape3d_83() {
  axon[314] {	pt3dadd(781.554, -797.124, 20.6632, 0.65)
	pt3dadd(781.484, -796.783, 20.7267, 0.55)
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  }
}
proc shape3d_84() {
  axon[318] {	pt3dadd(770.731, -741.325, 17.751, 0.4)
	pt3dadd(770.621, -741.085, 17.6724, 0.45)
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  }
}
proc shape3d_85() {
  axon[322] {	pt3dadd(754.777, -691.441, 2.2032, 0.4)
	pt3dadd(754.684, -691.138, 2.16765, 0.4)
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  }
}
proc shape3d_86() {
  axon[325] {	pt3dadd(736.973, -640.323, -7.524, 0.4)
	pt3dadd(736.945, -639.984, -7.57125, 0.4)
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  }
}
proc shape3d_87() {
  axon[325] {	pt3dadd(715.887, -587.636, -4.84275, 0.55)
	pt3dadd(715.716, -587.403, -4.83165, 0.55)
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  }
}
proc shape3d_88() {
  axon[337] {	pt3dadd(693.465, -562.842, 2.0043, 0.4)
	pt3dadd(693.283, -562.633, 2.04405, 0.3)
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  }
}
proc shape3d_89() {
  axon[347] {	pt3dadd(668.7, -532.747, 2.76015, 0.5)
	pt3dadd(668.589, -532.448, 2.7648, 0.55)
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  }
}
proc shape3d_90() {
  axon[355] {	pt3dadd(659.286, -482.4, 2.1588, 0.75)
	pt3dadd(659.23, -482.173, 2.09055, 0.6)
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  }
}
proc shape3d_91() {
  axon[363] {	pt3dadd(651.378, -442.527, -1.45545, 0.5)
	pt3dadd(651.202, -442.306, -1.4688, 0.45)
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  }
}
proc shape3d_92() {
  axon[368] {	pt3dadd(705.794, -561.119, -1.4106, 0.8)
  }
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  }
}
proc shape3d_93() {
  axon[379] {	pt3dadd(614.66, -403.998, 4.2651, 0.75)
	pt3dadd(614.458, -403.83, 4.35375, 0.8)
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  }
}
proc shape3d_94() {
  axon[404] {	pt3dadd(595.773, -386.017, 10.8666, 0.6)
	pt3dadd(595.588, -385.835, 10.8535, 0.6)
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  }
}
proc shape3d_95() {
  axon[404] {	pt3dadd(562.349, -346.36, 17.0286, 0.6)
	pt3dadd(562.26, -346.167, 17.2296, 0.55)
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  }
}
proc shape3d_96() {
  axon[406] {	pt3dadd(539.897, -296.414, 20.9916, 0.25)
	pt3dadd(539.844, -296.378, 20.9916, 0.25)
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  }
}
proc shape3d_97() {
  axon[408] {	pt3dadd(515.453, -250.297, 23.647, 0.4)
	pt3dadd(515.733, -250.527, 23.647, 0.4)
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  }
}
proc shape3d_98() {
  axon[418] {	pt3dadd(498.111, -214.587, 27.4639, 0.5)
	pt3dadd(498.127, -214.541, 27.5042, 0.4)
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  }
}
proc shape3d_99() {
  axon[422] {	pt3dadd(470.985, -175.234, 30.7873, 0.45)
	pt3dadd(470.789, -175.122, 30.8257, 0.4)
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  }
}
proc shape3d_100() {
  axon[429] {	pt3dadd(440.218, -139.299, 27.9723, 0.45)
	pt3dadd(440.047, -139.112, 27.9045, 0.35)
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  }
}
proc shape3d_101() {
  axon[434] {	pt3dadd(402.232, -110.481, 29.8491, 0.65)
	pt3dadd(402.053, -110.267, 29.8312, 0.45)
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  }
}
proc shape3d_102() {
  axon[436] {	pt3dadd(351.195, -87.2504, 32.3282, 0.4)
	pt3dadd(350.91, -87.146, 32.318, 0.45)
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  }
}
proc shape3d_103() {
  axon[443] {	pt3dadd(312.703, -71.4773, 40.0621, 0.45)
	pt3dadd(312.507, -71.363, 40.0944, 0.4)
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  }
}
proc shape3d_104() {
  axon[445] {	pt3dadd(257.741, -50.4096, 42.2472, 0.3)
	pt3dadd(257.492, -50.2922, 42.2859, 0.3)
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  }
}
proc shape3d_105() {
  axon[452] {	pt3dadd(198.966, -34.4334, 45.9025, 4.3)
	pt3dadd(198.514, -34.2651, 46.7542, 4.2)
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  }
}
proc shape3d_106() {
  axon[461] {	pt3dadd(191.574, -33.1349, 47.4093, 0.5548)
	pt3dadd(191.334, -33.0321, 47.2959, 0.5548)
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  }
}
proc shape3d_107() {
  axon[463] {	pt3dadd(156.444, -27.1747, 53.4942, 0.65)
	pt3dadd(156.045, -27.1725, 53.5245, 0.7)
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  }
}
proc shape3d_108() {
  axon[463] {	pt3dadd(100.975, -15.977, 66.3848, 0.75)
	pt3dadd(100.691, -15.8685, 66.468, 0.75)
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  }
}
proc shape3d_109() {
  axon[463] {	pt3dadd(54.5778, -14.1177, 94.1802, 0.4)
	pt3dadd(54.2342, -14.1215, 94.3495, 0.4)
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  }
}
proc shape3d_110() {
  axon[465] {	pt3dadd(194.957, -40.3322, 45.5845, 0.4882)
	pt3dadd(194.829, -40.4279, 45.7939, 0.4882)
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  }
}
proc basic_shape() {
  shape3d_1()
  shape3d_2()
  shape3d_3()
  shape3d_4()
  shape3d_5()
  shape3d_6()
  shape3d_7()
  shape3d_8()
  shape3d_9()
  shape3d_10()
  shape3d_11()
  shape3d_12()
  shape3d_13()
  shape3d_14()
  shape3d_15()
  shape3d_16()
  shape3d_17()
  shape3d_18()
  shape3d_19()
  shape3d_20()
  shape3d_21()
  shape3d_22()
  shape3d_23()
  shape3d_24()
  shape3d_25()
  shape3d_26()
  shape3d_27()
  shape3d_28()
  shape3d_29()
  shape3d_30()
  shape3d_31()
  shape3d_32()
  shape3d_33()
  shape3d_34()
  shape3d_35()
  shape3d_36()
  shape3d_37()
  shape3d_38()
  shape3d_39()
  shape3d_40()
  shape3d_41()
  shape3d_42()
  shape3d_43()
  shape3d_44()
  shape3d_45()
  shape3d_46()
  shape3d_47()
  shape3d_48()
  shape3d_49()
  shape3d_50()
  shape3d_51()
  shape3d_52()
  shape3d_53()
  shape3d_54()
  shape3d_55()
  shape3d_56()
  shape3d_57()
  shape3d_58()
  shape3d_59()
  shape3d_60()
  shape3d_61()
  shape3d_62()
  shape3d_63()
  shape3d_64()
  shape3d_65()
  shape3d_66()
  shape3d_67()
  shape3d_68()
  shape3d_69()
  shape3d_70()
  shape3d_71()
  shape3d_72()
  shape3d_73()
  shape3d_74()
  shape3d_75()
  shape3d_76()
  shape3d_77()
  shape3d_78()
  shape3d_79()
  shape3d_80()
  shape3d_81()
  shape3d_82()
  shape3d_83()
  shape3d_84()
  shape3d_85()
  shape3d_86()
  shape3d_87()
  shape3d_88()
  shape3d_89()
  shape3d_90()
  shape3d_91()
  shape3d_92()
  shape3d_93()
  shape3d_94()
  shape3d_95()
  shape3d_96()
  shape3d_97()
  shape3d_98()
  shape3d_99()
  shape3d_100()
  basic_shape_1()
}
proc basic_shape_1() {
  shape3d_101()
  shape3d_102()
  shape3d_103()
  shape3d_104()
  shape3d_105()
  shape3d_106()
  shape3d_107()
  shape3d_108()
  shape3d_109()
  shape3d_110()
}

objref all, somatic, dendritic, axonal
proc subsets() { local i
  objref all, somatic, dendritic, axonal
  all = new SectionList()
    soma all.append()
    for i=0, 474 axon[i] all.append()
    for i=0, 48 dendrite[i] all.append()

  somatic = new SectionList()
    soma somatic.append()

  dendritic = new SectionList()
    for i=0, 48 dendrite[i] dendritic.append()

  axonal = new SectionList()
    for i=0, 474 axon[i] axonal.append()

}
proc geom() {
  forsec all {  }
}



/////////////////MAYBE

/* Sets nseg in each section to an odd value
   so that its segments are no longer than 
     d_lambda x the AC length constant
   at frequency freq in that section.

   Be sure to specify your own Ra and cm before calling geom_nseg()

   To understand why this works, 
   and the advantages of using an odd value for nseg,
   see  Hines, M.L. and Carnevale, N.T.
        NEURON: a tool for neuroscientists.
        The Neuroscientist 7:123-135, 2001.
*/

// these are reasonable values for most models
freq = 100      // Hz, frequency at which AC length constant will be computed
d_lambda = 0.1

func lambda_f() { local i, x1, x2, d1, d2, lam
        if (n3d() < 2) {
                return 1e5*sqrt(diam/(4*PI*$1*Ra*cm))
        }
// above was too inaccurate with large variation in 3d diameter
// so now we use all 3-d points to get a better approximate lambda
        x1 = arc3d(0)
        d1 = diam3d(0)
        lam = 0
        for i=1, n3d()-1 {
                x2 = arc3d(i)
                d2 = diam3d(i)
                lam += (x2 - x1)/sqrt(d1 + d2)
                x1 = x2   d1 = d2
        }
        //  length of the section in units of lambda
        lam *= sqrt(2) * 1e-5*sqrt(4*PI*$1*Ra*cm)

        return L/lam
}
//////////////////////////////////////////////////////////////////////





proc geom_nseg() {
  forsec all { nseg = int((L/(0.1*lambda_f(5000))+.999)/2)*2 + 1  }
}
proc biophys() {
  forsec all {
    cm = 1
    insert pas
      g_pas = 0.001
      e_pas = -70
    Ra = 35.4
  }
}
access soma

celldef()


proc go4(){
soma distance() // make soma(0) be the reference point for distance measurements
      forall {
        print secname()
        for (x,0) print x, " ", distance(x)
      }
}
